#40 cm x 40 cm x 40 cm großes Wasserphantom in der Mitte der "World"

#Protonenquelle


s:So/Demo/Type = "Beam"
s:So/Demo/Component = "BeamPosition"
s:So/Demo/BeamParticle = "proton"
d:So/Demo/BeamEnergy = 150. MeV
u:So/Demo/BeamEnergySpread = 0.7
s:So/Demo/BeamPositionDistribution = "Gaussian"
s:So/Demo/BeamPositionCutoffShape = "Ellipse"
d:So/Demo/BeamPositionCutoffX = 10. cm
d:So/Demo/BeamPositionCutoffY = 10. cm
d:So/Demo/BeamPositionSpreadX = 0.65 cm
d:So/Demo/BeamPositionSpreadY = 0.65 cm
s:So/Demo/BeamAngularDistribution = "Gaussian"
d:So/Demo/BeamAngularCutoffX = 90. deg
d:So/Demo/BeamAngularCutoffY = 90. deg
d:So/Demo/BeamAngularSpreadX = 0.0032 rad
d:So/Demo/BeamAngularSpreadY = 0.0032 rad
i:So/Demo/NumberOfHistoriesInRun = 100 #100 Teilchen werden simuliert

s:Ge/BeamPosition/Parent="World"
s:Ge/BeamPosition/Type="Group"
d:Ge/BeamPosition/TransX=0. m
d:Ge/BeamPosition/TransY=0. m
d:Ge/BeamPosition/TransZ= 30. cm
d:Ge/BeamPosition/RotX=180. deg
d:Ge/BeamPosition/RotY=0. deg
d:Ge/BeamPosition/RotZ=0. deg


#Patient

s:Ge/Patient/Parent   = "World"
s:Ge/Patient/Material = "G4_WATER"
d:Ge/Patient/TransX   = 0. m
d:Ge/Patient/TransY   = 0. m
d:Ge/Patient/TransZ   = 0. m
d:Ge/Patient/RotX     = 0. deg
d:Ge/Patient/RotY     = 0. deg
d:Ge/Patient/RotZ     = 0. deg

s:Ge/Patient/Type           = "TsDicomPatient"
s:Ge/Patient/DicomDirectory = "IMG0035_cropped_updated"
s:Ge/Patient/ImagingToMaterialConverter = "Schneider"
includeFile = HUtoMaterialSchneider.txt



#Definition vom Wasserphantom
#s:Ge/MyBox/Type = "TsBox"
#s:Ge/MyBox/Material = "G4_WATER"
#s:Ge/MyBox/Parent = "World"
#d:Ge/MyBox/HLX = 20. cm
#d:Ge/MyBox/HLY = 20. cm
#d:Ge/MyBox/HLZ = 20. cm
#d:Ge/MyBox/TransX = 0. m
#d:Ge/MyBox/TransY = 0. m
#d:Ge/MyBox/TransZ = 0. m
#d:Ge/MyBox/RotX = 0. deg
#d:Ge/MyBox/RotY = 0. deg
#d:Ge/MyBox/RotZ = 0. deg
#i:Ge/MyBox/XBins = 1
#i:Ge/MyBox/YBins = 1
#i:Ge/MyBox/ZBins = 1


#Scorer

s:Sc/DoseOnCTGrid/Quantity                  = "DoseToMedium"
s:Sc/DoseOnCTGrid/Component                 = "Patient"
b:Sc/DoseOnCTGrid/OutputToConsole           = "True"
s:Sc/DoseOnCTGrid/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseOnCTGrid/OutputType                = "csv"
b:Sc/DoseOnCTGrid/DICOMOutput32BitsPerPixel = "True"


#Definition der Ausgabe
s:Gr/ViewA/Type             = "OpenGL"
i:Gr/ViewA/WindowSizeX      = 1024
i:Gr/ViewA/WindowSizeY      = 768
b:Gr/ViewA/IncludeAxes      = "True"
d:Gr/ViewA/AxesSize 	    = 80. cm
d:Gr/ViewA/Theta            = 30 deg
d:Gr/ViewA/Phi              = 30 deg
s:Gr/ViewA/Projection       = "Perspective"
u:Gr/ViewA/Zoom             = 13.
#s:Gr/ViewA/ColorBy	    = "ParticleType"
s:Gr/ViewA/ColorBy	    = "Charge"
sv:Gr/ViewA/ColorByChargeColors = 3 "green" "green" "green"

b:Ts/PauseBeforeQuit = "True"
