##### Definition der möglich verwendbaren CPU-Threads

i:Ts/NumberOfThreads = 0

##### Physics

#sv:Ph/Default/Modules = 1 "g4stopping"
#sv:Ph/Default/Modules = 1 "Transportation_Only"
#sv:Ph/Default/Modules = 1 "g4em-standard_opt0"

##### Proton Source

s:Ge/BeamPosition/Parent="World"
s:Ge/BeamPosition/Type="Group"
d:Ge/BeamPosition/TransX= -18.6484375 cm
d:Ge/BeamPosition/TransY= 0. cm
d:Ge/BeamPosition/TransZ= 0. cm
d:Ge/BeamPosition/RotX=90. deg
d:Ge/BeamPosition/RotY=270. deg
d:Ge/BeamPosition/RotZ=0. deg

s:So/Demo/Type = "Beam"
s:So/Demo/Component = "BeamPosition"
s:So/Demo/BeamParticle = "proton"
d:So/Demo/BeamEnergy = 200. MeV
u:So/Demo/BeamEnergySpread = 0
s:So/Demo/BeamPositionDistribution = "Flat"
s:So/Demo/BeamPositionCutoffShape = "Ellipse"
d:So/Demo/BeamPositionCutoffX = 0.5 cm
d:So/Demo/BeamPositionCutoffY = 0.5 cm
d:So/Demo/BeamPositionSpreadX = 0.1 mm
d:So/Demo/BeamPositionSpreadY = 0.1 mm
s:So/Demo/BeamAngularDistribution = "None"
d:So/Demo/BeamAngularCutoffX = 90. deg
d:So/Demo/BeamAngularCutoffY = 90. deg
d:So/Demo/BeamAngularSpreadX = 0.000000032 rad
d:So/Demo/BeamAngularSpreadY = 0.000000032 rad
i:So/Demo/NumberOfHistoriesInRun = 100000

##### Einlesen der Patienten-Datei

includeFile = HUtoMaterialSchneider.txt

s:Ge/Patient/Type                       = "TsDicomPatient"
s:Ge/Patient/Parent                     = "World"
#s:Ge/Patient/DicomDirectory             = "../DICOM_bone"
#s:Ge/Patient/DicomDirectory             = "../DICOM_custom"
s:Ge/Patient/DicomDirectory             = "../DICOM_water"
sv:Ge/Patient/DicomModalityTags         = 1 "CT"
s:Ge/Patient/ImagingtoMaterialConverter = "Schneider"
#d:Ge/Patient/TransX   = 0. cm
#d:Ge/Patient/TransY   = 0. cm
#d:Ge/Patient/TransZ   = 0. cm
d:Ge/Patient/RotX   = 0. deg
d:Ge/Patient/RotY   = 180. deg
d:Ge/Patient/RotZ   = 180. deg
#s:Ge/Patient/Field 		    	= "DipoleMagnet" 
#u:Ge/Patient/MagneticFieldDirectionX	= 0.0
#u:Ge/Patient/MagneticFieldDirectionY 	= 0.0
#u:Ge/Patient/MagneticFieldDirectionZ 	= 1.0
#d:Ge/Patient/MagneticFieldStrength   	= 3.0 tesla
#s:Ge/Patient/MagneticField3DTable 		= "PurgMag3D.TABLE"
i:Ge/Patient/XBins = 341
i:Ge/Patient/YBins = 1
i:Ge/Patient/ZBins = 1
#iv:Ge/Patient/ShowSpecificSlicesZ = 1 1
iv:Ge/Patient/ShowSpecificSlicesZ = 1 27



##### Definition des Scorers zur Dosisberechnung

#s:Sc/MyScorer/Quantity                  = "TrackLengthEstimator"
#s:Sc/MyScorer/InputFile                  = "Muen.dat"
#sv:Sc/MyScorer/Report                    = 1 "Sum"
s:Sc/MyScorer/Quantity                  = "DoseToMedium"
s:Sc/MyScorer/Component                 = "Patient"
s:Sc/MyScorer/OutputFile                = "TOPAS_Beam"
s:Sc/MyScorer/OutputType                = "csv"
s:Sc/MyScorer/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/MyScorer/PropagateToChildren = "True"
i:Ge/MyScorer/XBins = 341
i:Ge/MyScorer/YBins = 1
i:Ge/MyScorer/ZBins = 1


#s:Gr/ViewA/Type        = "OpenGL"
#i:Gr/ViewA/WindowSizeX = 900
#i:Gr/ViewA/WindowSizeY = 900
#d:Gr/ViewA/Theta       = 0 deg
##d:Gr/ViewA/Phi         = 90 deg
#u:Gr/ViewA/Zoom        = 40
##i:Gr/ViewA/MagneticFieldArrowDensity 		= 1
#i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 1000000000
#
##Ts/UseQt = "True"
#b:Ts/PauseBeforeQuit = "True"