d:Ge/World/HLX       = 20.0 m
d:Ge/World/HLY       = 20.0 m
d:Ge/World/HLZ       = 20.0 m
b:Ge/World/Invisible = "True"

s:Ge/Nozzle/Type   = "Group"
s:Ge/Nozzle/Parent = "World"

s:Ge/Dipole/Type          = "TsBox"
s:Ge/Dipole/Parent        = "Nozzle"
s:Ge/Dipole/Material      = "Vacuum"
d:Ge/Dipole/HLX           = 200 cm
d:Ge/Dipole/HLY           = 200 cm
d:Ge/Dipole/HLZ           = 200 cm
s:Ge/Dipole/Field = "DipoleMagnet"
u:Ge/Dipole/MagneticFieldDirectionX    = 0.0
u:Ge/Dipole/MagneticFieldDirectionY    = 0.0
u:Ge/Dipole/MagneticFieldDirectionZ    = 1.0
d:Ge/Dipole/MagneticFieldStrength      = 1.5 tesla
i:Ge/Dipole/XBins = 2000
i:Ge/Dipole/YBins = 2000
i:Ge/Dipole/ZBins = 1
#d:Ge/Dipole/MaxStepSize = 10. mm # sets maximum step size used in this component

s:Ge/BeamPosition/Parent="World"
s:Ge/BeamPosition/Type="Group"
d:Ge/BeamPosition/TransX= -200.0 cm
d:Ge/BeamPosition/TransY= 200.0 cm
d:Ge/BeamPosition/TransZ= 0. cm
d:Ge/BeamPosition/RotX=90. deg
d:Ge/BeamPosition/RotY=270. deg
d:Ge/BeamPosition/RotZ=0. deg

s:So/Demo/Type = "Beam"
s:So/Demo/Component = "BeamPosition"
s:So/Demo/BeamParticle = "proton"
d:So/Demo/BeamEnergy = 200. MeV
u:So/Demo/BeamEnergySpread = 0
s:So/Demo/BeamPositionDistribution = "Flat"
s:So/Demo/BeamPositionCutoffShape = "Ellipse"
d:So/Demo/BeamPositionCutoffX = 0.25 mm
d:So/Demo/BeamPositionCutoffY = 0.25 mm
d:So/Demo/BeamPositionSpreadX = 0.0000001 mm
d:So/Demo/BeamPositionSpreadY = 0.0000001 mm
s:So/Demo/BeamAngularDistribution = "None"
d:So/Demo/BeamAngularCutoffX = 90. deg
d:So/Demo/BeamAngularCutoffY = 90. deg
d:So/Demo/BeamAngularSpreadX = 0.0000000000000000032 rad
d:So/Demo/BeamAngularSpreadY = 0.0000000000000000032 rad
i:So/Demo/NumberOfHistoriesInRun = 1000 #100 Teilchen werden simuliert

s:Sc/MyScorer/Quantity                  = "EnergyFluence"
s:Sc/MyScorer/Component                 = "Dipole"
s:Sc/MyScorer/OutputFile                = "TOPAS_Beam"
s:Sc/MyScorer/OutputType                = "csv"
s:Sc/MyScorer/IfOutputFileAlreadyExists = "Overwrite"

#s:Gr/ViewA/Type              = "OpenGL"
#i:Gr/ViewA/WindowSizeX       = 1024
#i:Gr/ViewA/WindowSizeY       = 768
#d:Gr/ViewA/Theta             = 55 deg
#d:Gr/ViewA/Phi               = 20 deg
#s:Gr/ViewA/Projection        = "Perspective"
#d:Gr/ViewA/PerspectiveAngle  = 30 deg
#u:Gr/ViewA/Zoom              = 1.
#b:Gr/ViewA/IncludeStepPoints = "True"
#
#b:Ts/PauseBeforeQuit = "True"